'CR1000
'Created by Short Cut (3.2)

'include the file that contains our instruction
Include "CPU:wunderground.dld"

'declare the array needed for passing info into the instruction
'and the result code we can monitor for success / fail
Dim WxData(26)
Public Result

'Declare Variables and Units
Dim HITF_2
Dim WCTF_2
Dim WCWSMPH_2
Dim ModSecsWin As Long
Public BattV
Public PTemp_C
Public TRHData_2(2)
Public Rain_mm
Public BP_mmHg
Public SlrkW
Public SlrMJ
Public WS_ms
Public WindDir
Public HI_C
Public SunHrs
Public PotSlrW
Public RTime_2(9)
Public SolPos_2(5)
Public WC_C
Public SW12State As Boolean
Public DP

Alias TRHData_2(1)=AirTC
Alias TRHData_2(2)=RH
Alias RTime_2(1)=Year_2
Alias RTime_2(2)=Month_2
Alias RTime_2(3)=DayOfMonth_2
Alias RTime_2(4)=HourOfDay_2
Alias RTime_2(5)=Minutes_2
Alias RTime_2(6)=Seconds_2
Alias RTime_2(7)=Microseconds_2
Alias RTime_2(8)=DayOfWeek_2
Alias RTime_2(9)=DayOfYear_2
Alias SolPos_2(1)=SolarAzimuth_2
Alias SolPos_2(2)=SunElevation_2
Alias SolPos_2(3)=HourAngle_2
Alias SolPos_2(4)=Declination_2
Alias SolPos_2(5)=AirMass_2

Units BattV=Volts
Units PTemp_C=Deg C
Units Rain_mm=mm
Units BP_mmHg=mmHg
Units SlrkW=kW/m^2
Units SlrMJ=MJ/m^2
Units WS_ms=meters/second
Units WindDir=degrees
Units HI_C=Deg C
Units SunHrs=hours
Units PotSlrW=W/m^2
Units WC_C=Deg C
Units AirTC=Deg C
Units RH=%
Units Year_2=years
Units Month_2=months
Units DayOfMonth_2=days
Units HourOfDay_2=hours
Units Minutes_2=minutes
Units Seconds_2=seconds
Units Microseconds_2=microseconds
Units DayOfWeek_2=days
Units DayOfYear_2=days
Units SolarAzimuth_2=degrees
Units SunElevation_2=degrees
Units HourAngle_2=radians
Units Declination_2=radians
Units AirMass_2=unitless

'Define Data Tables
DataTable(MET,True,-1)
	DataInterval(0,60,Min,10)
	Sample(1,BattV,FP2)
	Sample(1,PTemp_C,FP2)
	Average(1,AirTC,FP2,False)
	Sample(1,RH,FP2)
	Totalize(1,Rain_mm,FP2,False)
	Average(1,BP_mmHg,FP2,False)
	Sample(1,SlrkW,FP2)
	Totalize(1,SlrMJ,IEEE4,False)
	ETsz(AirTC,RH,WS_ms,SlrMJ,109.0825,31.938406,1321,3,0,FP2,False)
	FieldNames("ETos,Rso")
	Average(1,WS_ms,FP2,False)
	Sample(1,WindDir,FP2)
	WindVector(1,WS_ms,WindDir,FP2,False,5,0,0)
	FieldNames("WS_ms_S_WVT,WindDir_D1_WVT,WindDir_SD1_WVT")
	Average(1,HI_C,FP2,False)
	Totalize(1,SunHrs,FP2,False)
	Average(1,PotSlrW,FP2,False)
	Average(1,WC_C,FP2,False)
EndTable

DataTable(Storms,True,-1)
	DataInterval(0,300,Sec,10)
	DataEvent(0,Rain_mm>0,Rain_mm=0,2)
	Minimum(1,BattV,FP2,False,False)
	Totalize(1,Rain_mm,FP2,False)
EndTable

AngleDegrees

'Main Program
BeginProg
	'Main Scan
	Scan(5,Sec,1,0)
		'Default CR1000 Datalogger Battery Voltage measurement 'BattV'
		Battery(BattV)
		'Default CR1000 Datalogger Wiring Panel Temperature measurement 'PTemp_C'
		PanelTemp(PTemp_C,_60Hz)
		'CS215 Temperature & Relative Humidity Sensor measurements 'AirTC' and 'RH'
		SDI12Recorder(TRHData_2(),7,"0","M!",1,0,-1)
		'TE525/TE525WS Rain Gauge measurement 'Rain_mm'
		PulseCount(Rain_mm,1,12,2,0,0.254,0)
		'CS100 Barometric Pressure Sensor measurement 'BP_mmHg'
		If TimeIntoInterval(59,60,Min) Then PortSet(3,1)
		If TimeIntoInterval(0,60,Min) Then
			VoltSE(BP_mmHg,1,mV2500,4,1,0,_60Hz,0.2,748.9556)
			BP_mmHg=BP_mmHg*0.75006
			PortSet(3,0)
		EndIf
		'CS300 Pyranometer measurements 'SlrMJ' and 'SlrkW'
		VoltSE(SlrkW,1,mV250,1,1,0,_60Hz,1,0)
		If SlrkW<0 Then SlrkW=0
		SlrMJ=SlrkW*2.5E-05
		SlrkW=SlrkW*0.005
		'05103 Wind Speed & Direction Sensor measurements 'WS_ms' and 'WindDir'
		PulseCount(WS_ms,1,1,1,1,0.098,0)
		BrHalf(WindDir,1,mV2500,2,1,1,2500,True,20000,_60Hz,355,0)
		If WindDir>=360 Or WindDir<0 Then WindDir=0
		'Heat Index calculation 'HI_C'
		HITF_2=1.8*AirTC+32
		HI_C=-42.379+2.04901523*HITF_2+10.14333127*RH-0.22475541*HITF_2*RH-6.83783*10^-3*HITF_2^2-5.481717*10^-2*RH^2+1.22874*10^-3*HITF_2^2*RH+8.5282*10^-4*HITF_2*RH^2-1.99*10^-6*HITF_2^2*RH^2
		If HITF_2<80 Or RH<40 Or HI_C<HITF_2 Or HI_C=NAN Then HI_C=HITF_2
		HI_C=(5/9)*(HI_C-32)
		'Calculate Sunshine Hours
		'Get current time
		RealTime(RTime_2(1))
		'Calculate solar position
		SolarPosition(SolPos_2(),RTime_2(),-7*3600,31.938406,-109.082536,1321,-1,AirTC)
		'Calculate potential radiation for time & position (multiply sine of solar elevation angle by solar constant 1373)
		PotSlrW=SIN(SunElevation_2)*1373
		'If the measured value (W/m^2) is greater than 0.4 * the potential solar radiation (W/m^2)
		'and the sine of the sun elevation angle (degrees) is great than 0.1 (elevation angle of 6 degrees)
		'than it has been sunny for the current scan.
		If SlrkW>0.4*PotSlrW And SIN(SunElevation_2)>0.1 Then
			'Calculate sun hours for scan time in seconds
			SunHrs=1/3600*5
		Else
			'Set sun hours for scan time in seconds to 0
			SunHrs=0
		EndIf
		'Wind Chill calculation 'WC_C'
		WCTF_2=1.8*AirTC+32
		WCWSMPH_2=WS_ms*2.236936
		WC_C=35.74+0.6215*WCTF_2-35.75*WCWSMPH_2^0.16+0.4275*WCTF_2*WCWSMPH_2^0.16
		If WC_C>WCTF_2 Or WC_C=NAN Then WC_C=WCTF_2
		If WCTF_2>50 Or WCWSMPH_2<3 Then WC_C=WCTF_2
		WC_C=(5/9)*(WC_C-32)
		
    'DewPoint calculation
    DewPoint ( DP, AirTC, RH )
    
		'SW12 Timed Control
		'Get seconds since 1990 and do a modulo divide by 86400 seconds (24 hours)
		ModSecsWin=Public.TimeStamp(1,1) MOD 86400
		'Turn ON SW12 between 1200 hours and 1530 hours
		If (ModSecsWin>=43200 And ModSecsWin<54000) Then
			SW12State=True
		Else
			SW12State=False
    EndIf
		'Always turn OFF SW12 if battery drops below 9 volts
		If BattV<9 Then SW12State=False
		'Set SW12 to the state of 'SW12State' variable
		SW12(SW12State)
		'Call Data Tables and Store Data
		CallTable MET
		CallTable Storms
		'post data to weather undergeround
    If TimeIntoInterval(0,10,Min) Then
      WxData() = NAN 'initalize all to NAN
      WxData(1) = WindDir
      WxData(2) = WS_ms*2.237
      WxData(9) = RH
      WxData(10) = DP * 9/5 + 32
      WxData(11) = AirTC * 9/5 + 32
      WxData(16) = Rain_mm/25.4
      WxData(18) = BP_mmHg/25.4
      WxData(26) = PotSlrW
      Call wundergroundPWS(Result,"KAZSANSI14","v9evwm4k",WxData,0)
      EndIf
	NextScan
EndProg
